CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '---', 'Settings converted from legacy pipeline.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '---', 'Settings converted from legacy pipeline.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:(?P<Celltype>.*)-(?P<Time>.*)-(?P<Dose>.*)-(?P<Treatment>.*)-(?P<Replicate>.*)-_(.*)_(.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Settings converted from legacy pipeline.', 'Please change any color images from "Load as Grayscale image" to "Load as Color image"']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
    Select the rule criteria:and (file does contain "_0001.tif")
    Name to assign these images:Phalloidin
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "_0002.tif")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "_0000.tif")
    Name to assign these images:PBL
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '---', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,45
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:15
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:PBL
    Name the primary objects to be identified:PBL
    Typical diameter of objects, in pixel units (Min,Max):8,25
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Background
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:3
    Lower and upper bounds on threshold:0,1.0
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    Method to calculate adaptive window size:Image size
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Phalloidin
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
RelateObjects:[module_num:8|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
    Select the input child objects:PBL
    Select the input parent objects:Cells
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
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
MeasureObjectIntensity:[module_num:9|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
    Hidden:3
    Select an image to measure:DAPI
    Select an image to measure:Phalloidin
    Select an image to measure:PBL
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:PBL

MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:PBL
    Calculate the Zernike features?:No

MaskImage:[module_num:11|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
    Select the input image:DAPI
    Name the output image:MaskPBL
    Use objects or an image as a mask?:Objects
    Select object for mask:PBL
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    Invert the mask?:No

GrayToColor:[module_num:12|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
    Select a color scheme:RGB
    Select the image to be colored red:Phalloidin
    Select the image to be colored green:PBL
    Select the image to be colored blue:DAPI
    Name the output image:ColorImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:NucleiOutlines
    Select outline color:Blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei
    Select outlines to display:CellsOutlines
    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells
    Select outlines to display:PBLOutlines
    Select outline color:#80FF00
    Load outlines from an image or objects?:Objects
    Select objects to display:PBL

OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:PBL
    Name the output image:PBLOverlay
    Outline display mode:Color
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    Width of outlines:2
    Select outlines to display:NucleiOutlines
    Select outline color:#80FF00
    Load outlines from an image or objects?:Objects
    Select objects to display:PBL

OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MaskPBL
    Name the output image:DAPIMaskPBLOverlay
    Outline display mode:Color
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    Width of outlines:2
    Select outlines to display:NucleiOutlines
    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:PBL

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:PBLOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_PBL
    Saved file format:jpg
    Output file location:Default Output Folder sub-folder|Images
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:DAPIMaskPBLOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_DAPIMaskPBL
    Saved file format:jpg
    Output file location:Default Output Folder sub-folder|Images
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:jpg
    Output file location:Default Output Folder sub-folder|Images
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:ColorImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_merge
    Saved file format:jpg
    Output file location:Default Output Folder sub-folder|Images
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
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