CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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notes:["Load the images by matching files in the folder against the unique text pattern for each stain: 'Channel 1' for protein, 'Channel 2' for the nuclei image. The two images together comprise an image set."]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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|.
    Check image sets for missing or duplicate files?:No
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:3
    Text that these images have in common (case-sensitive):_0001.tif
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:(?P<Celltype>.*)-(?P<Time>.*)-(?P<Dose>.*)-(?P<Treatment>.*)-(?P<Replicate>.*)-_(.*)_(.*)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Phalloidin
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):_0002.tif
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:(?P<Celltype>.*)-(?P<Time>.*)-(?P<Dose>.*)-(?P<Treatment>.*)-(?P<Replicate>.*)-_(.*)_(.*)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:DAPI
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):_0000.tif
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:(?P<Celltype>.*)-(?P<Time>.*)-(?P<Dose>.*)-(?P<Treatment>.*)-(?P<Replicate>.*)-_(.*)_(.*)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:PBL
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    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,45
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:15
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucleiOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifyPrimaryObjects:[module_num:3|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
    Select the input image:PBL
    Name the primary objects to be identified:PBL
    Typical diameter of objects, in pixel units (Min,Max):1,30
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:No
    Select the thresholding method:RobustBackground Global
    Threshold correction factor:3
    Lower and upper bounds on threshold:0,1.0
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:8
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:PBLOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifySecondaryObjects:[module_num:4|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Phalloidin
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Regularization factor:0.05
    Name the outline image:CellsOutlines
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    Retain outlines of the identified secondary objects?:Yes
    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Discard secondary objects that touch the edge of the image?:No
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    Fill holes in identified objects?:Yes

RelateObjects:[module_num:5|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
    Select the input child objects:PBL
    Select the input parent objects:Cells
    Calculate distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
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
MeasureObjectIntensity:[module_num:6|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
    Hidden:3
    Select an image to measure:DAPI
    Select an image to measure:Phalloidin
    Select an image to measure:PBL
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:PBL

MeasureObjectSizeShape:[module_num:7|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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:PBL
    Calculate the Zernike features?:No

MaskImage:[module_num:8|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
    Select the input image:Phalloidin
    Name the output image:MaskBackground
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:Yes

MeasureImageIntensity:[module_num:9|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
    Select the image to measure:MaskBackground
    Measure the intensity only from areas enclosed by objects?:No
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
GrayToColor:[module_num:10|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
    Select a color scheme:RGB
    Select the input image to be colored red:Phalloidin
    Select the input image to be colored green:PBL
    Select the input image to be colored blue:DAPI
    Name the output image:ColorImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OrigOverlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:NucleiOutlines
    Select outline color:Blue
    Select outlines to display:CellsOutlines
    Select outline color:Red
    Select outlines to display:PBLOutlines
    Select outline color:White

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Do you want to add a suffix to the image file name?:No
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    Select file format to use:jpg
    Output file location:Default Output Folder sub-folder|Images
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

ExportToSpreadsheet:[module_num:13|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:Yes
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